PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitledFINAL
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      color = 1.0000, 1.0000, 0.8824
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 8
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      text:
        HELLO!!

        This experiment will take only few minutes. It would be great if you give all your attention and participate
    TextComponent text_2
      color = 1.0000, 1.0000, 0.8824
      letterHeight = 0.05
      startVal [time (s)] = 8
      stopVal [time (s)] = 10
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      text:
        Are you ready?

        Let's Get Started !
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [time (s)] = 15
      text = Get ready to have a glimpse of some beautiful pictures :)
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  Routine all_pictures
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    ImageComponent blackroad
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/Dark image 2.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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    ImageComponent yellowillusion
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/Yellow blue image.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [time (s)] = 6
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    ImageComponent redillusion
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/Red image.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 6
      stopVal [time (s)] = 9
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    ImageComponent wall
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/wall.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 9
      stopVal [time (s)] = 12
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    ImageComponent image
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/colourful new.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 12
      stopVal [time (s)] = 15
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  Routine instructions2
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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      text:
        I hope you love the pictures :)
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [time (s)] = 13
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      text:
        The pictures you saw earlier will now be displayed twice.

        READ the upcoming instructions carefully!
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 13
      stopVal [time (s)] = 23
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      text:
        If you remember the picture press 'r' key on your keyboard

        If you do not remember the picture press 'n' key on your keyboard
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 23
      stopVal [time (s)] = 33
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      text:
        You will see 2 pictures and then those 2 pictures will be Repeated.

        In both the cases you have to press 'r' or 'n' key by default.


        DO NOT PRESS ANY OTHER KEY!
  Routine Routine_1
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    ImageComponent yellowillusionimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/Yellow blue image.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [time (s)] = 3
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    ImageComponent blackroadimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/Dark image 2.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [time (s)] = 6
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    KeyboardComponent key_resp
      allowedKeys = 'r', 'n'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
      storeCorrect = True
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  Routine routine_2
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    ImageComponent pastelimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/In house pastel image.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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    ImageComponent redillusionimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/Red image.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [time (s)] = 6
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    KeyboardComponent kr
      allowedKeys = 'r', 'n'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      storeCorrect = True
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  Routine routine_3
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    ImageComponent whiteimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/white image.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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    ImageComponent yellowwhiteimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/yellow-white.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [time (s)] = 6
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    KeyboardComponent kr_2
      allowedKeys = 'r', 'n'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      storeCorrect = True
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  Routine routine_4
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    ImageComponent colourfulimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/colourful new.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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    ImageComponent wallimage
      image = C:/Dhrumna/Ahmedabad University/Fourth year/PSY PROJECT/Images/wall.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [time (s)] = 6
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    KeyboardComponent kr_3
      allowedKeys = 'r', 'n'
      correctAns = $corr_resp
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
      storeCorrect = True
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  Routine Thanks
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3
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      text:
        THANK YOU :)
Flow
  Routine trial
  Routine all_pictures
  Routine instructions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Dhrumna Chokshi_AU2020079 _CONDITION EXCEL SHEETS/Routine1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'yellowillusionimage ', 'corr_resp': 'n'},
      {'image': 'blackroadimage', 'corr_resp': 'r'}]
    Routine Routine_1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Dhrumna Chokshi_AU2020079 _CONDITION EXCEL SHEETS/Routine2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'pastelimage', 'corr_resp': 'n'},
      {'image': 'redillusionimage', 'corr_resp': 'r'}]
    Routine routine_2
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Dhrumna Chokshi_AU2020079 _CONDITION EXCEL SHEETS/Routine3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'whiteimage', 'corr_resp': 'n'},
      {'image': 'yellowwhiteimage', 'corr_resp': 'n'}]
    Routine routine_3
  LoopTerminator trials_3
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Dhrumna Chokshi_AU2020079 _CONDITION EXCEL SHEETS/Routine4.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'wallimage', 'corr_resp': 'r'},
      {'image': 'colourfulimage', 'corr_resp': 'n'}]
    Routine routine_4
  LoopTerminator trials_4
  Routine Thanks
